PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = validation experiment
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Routines
  Routine Third_intro
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        If you want to choose left one, please type 'Q'.

        If you want to choose right one, please type 'P'.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine First_intro
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 200
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      text:
        Dear participants,

        Welcome!

        Please type 'space' to continue.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Second_intro
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        For this experiment, you will make a choose between two cat images.
        One will be the original image and the other would be a style tansformed image

        Please choosing the one you think is cuter.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Experiment
    TextComponent text_4
      letterHeight = 0.1
      pos = (-0.6,0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trail_nums
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    ImageComponent image
      image [set every repeat] = $img1
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $img2
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'q','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.07
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text = 'Q' for Left is Cuter
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    TextComponent text_6
      letterHeight = 0.1
      pos = (-0.4,0.4)
      startVal [time (s)] = 0.0
      text = /60
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    TextComponent text_8
      letterHeight = 0.07
      pos = (0.5,-0.4)
      startVal [time (s)] = 0.0
      text = 'P' for Right is Cuter
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  Routine End
    TextComponent text_7
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thanks for your participation!
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Flow
  Routine First_intro
  Routine Second_intro
  Routine Third_intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Condition.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trail_nums': 0, 'img1': 'original image/flickr_cat_000083.png', 'img2': 'style transformed image/flickr_cat_000083_make_uglier.png', 'style_transformed': 'make_uglier'},
      {'trail_nums': 1, 'img1': 'original image/flickr_cat_000227.png', 'img2': 'style transformed image/flickr_cat_000227_make_uglier.png', 'style_transformed': 'make_uglier'},
      {'trail_nums': 2, 'img1': 'original image/flickr_cat_000319.png', 'img2': 'style transformed image/flickr_cat_000319_make_cuter.png', 'style_transformed': 'make_cuter'},
      {'trail_nums': 3, 'img1': 'original image/flickr_cat_000405.png', 'img2': 'style transformed image/flickr_cat_000405_make_uglier.png', 'style_transformed': 'make_uglier'},
      {'trail_nums': 4, 'img1': 'original image/flickr_cat_000475.png', 'img2': 'style transformed image/flickr_cat_000475_make_uglier.png', 'style_transformed': 'make_uglier'},
      {'trail_nums': 5, 'img1': 'original image/flickr_cat_000483.png', 'img2': 'style transformed image/flickr_cat_000483_make_cuter.png', 'style_transformed': 'make_cuter'},
      {'trail_nums': 6, 'img1': 'original image/flickr_cat_000722.png', 'img2': 'style transformed image/flickr_cat_000722_make_uglier.png', 'style_transformed': 'make_uglier'},
      {'trail_nums': 7, 'img1': 'original image/flickr_cat_000773.png', 'img2': 'style transformed image/flickr_cat_000773_make_uglier.png', 'style_transformed': 'make_uglier'}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
    Routine Experiment
  LoopTerminator trials
  Routine End
